PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = delay discounting
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today " + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = delay discounting (2).xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 88, 'future_reward': 95, 'delay': 180},
      {'reward_today': 100, 'future_reward': 136, 'delay': 199},
      {'reward_today': 130, 'future_reward': 120, 'delay': 230},
      {'reward_today': 150, 'future_reward': 125, 'delay': 340},
      {'reward_today': 156, 'future_reward': 140, 'delay': 400},
      {'reward_today': 210, 'future_reward': 145, 'delay': 465},
      {'reward_today': 250, 'future_reward': 150, 'delay': 470},
      {'reward_today': 310, 'future_reward': 155, 'delay': 500},
      {'reward_today': 250, 'future_reward': 170, 'delay': 520},
      {'reward_today': 322, 'future_reward': 175, 'delay': 580},
      {'reward_today': 380, 'future_reward': 180, 'delay': 590},
      {'reward_today': 423, 'future_reward': 185, 'delay': 600},
      {'reward_today': 467, 'future_reward': 200, 'delay': 620},
      {'reward_today': 500, 'future_reward': 225, 'delay': 650},
      {'reward_today': 770, 'future_reward': 400, 'delay': 680},
      {'reward_today': 820, 'future_reward': 445, 'delay': 700},
      {'reward_today': 865, 'future_reward': 500, 'delay': 750},
      {'reward_today': 890, 'future_reward': 555, 'delay': 780}]
    Routine trial
  LoopTerminator trials
